PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1090, 800)
  expName = untitled_FINAL_NEWEST
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
    CodeComponent mouse_visible
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible=True
      End Routine:
        win.mouseVisible=False
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    CodeComponent label_opacity
      Code Type = Auto->JS
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      Begin Routine:
        if show_label==1:
            label_text.opacity==1
        else:
            label_text.opacity==0
    TextComponent label_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $etykieta
    ImageComponent stim_image
      image [set every repeat] = $image_path
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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    SliderComponent suwak_badanie
      color = $(-1.0000, 1.0000, 1.0000)
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      initVal = 3
      letterHeight = 0.05
      pos = (0, 0.1)
      size = (0.5, 0.1)
      startVal [time (s)] = 2.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
      units = norm
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    TextComponent lewa_etykieta
      letterHeight = 0.05
      pos = [-0.5, -0.1]
      startVal [time (s)] = 2.0
      text [set every repeat] = $left_label
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    TextComponent prawa_etykieta
      letterHeight = 0.05
      pos = (0.5, -0.1)
      startVal [time (s)] = 2.0
      text [set every repeat] = $right_label
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'radość', 'right_label': 'smutek', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'strach', 'right_label': 'złość', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'zaufanie', 'right_label': 'wstręt', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'zaskoczenie', 'right_label': 'oczekiwanie', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'radość', 'right_label': 'smutek', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'strach', 'right_label': 'złość', 'show_label': 1},
      {'image_path': 'C:\\Users\\julia\\OneDrive\\Pulpit\\percepcja_psychopy\\photos\\ee7bd76502e1d9aea7c74fc5bea75be9.jpg', 'etykieta': 'test', 'left_label': 'zaufanie', 'right_label': 'wstręt', 'show_label': 1}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
    Routine trial
  LoopTerminator trials
